# Generated by Configurator on Mon Aug 05 15:15:43 CEST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,pco_camera,PCO_Camera,pco_camera
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage
Device,LightEngine,Lumencor,LightEngine

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,pco_camera,DemoMode,Off
Property,XYStage,Port,COM3
Property,ZStage,Axis,Z
Property,ZStage,Port,COM3
Property,LightEngine,Connection,COM4
Property,LightEngine,Model,SOLASE

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,1

# Roles
Property,Core,Camera,pco_camera
Property,Core,Shutter,LightEngine
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: LED_light
# Preset: on
ConfigGroup,LED_light,on,XYStage,SerialCommand,TTL [Y=1]

# Preset: off
ConfigGroup,LED_light,off,XYStage,SerialCommand,TTL [Y=0]


# Group: fluorescence
# Preset: on_50P
ConfigGroup,fluorescence,on_50P,LightEngine,State,0
ConfigGroup,fluorescence,on_50P,LightEngine,WHITE,1
ConfigGroup,fluorescence,on_50P,LightEngine,WHITE_Intensity,50

# Preset: on_70P
ConfigGroup,fluorescence,on_70P,LightEngine,State,0
ConfigGroup,fluorescence,on_70P,LightEngine,WHITE,1
ConfigGroup,fluorescence,on_70P,LightEngine,WHITE_Intensity,70

# Preset: off
ConfigGroup,fluorescence,off,LightEngine,State,0
ConfigGroup,fluorescence,off,LightEngine,WHITE,0
ConfigGroup,fluorescence,off,LightEngine,WHITE_Intensity,70



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,pco_camera,Acquiremode,Internal
PixelSize_um,Res0,0.5824
PixelSizeAffine,Res0,0.5824,0.0,0.0,0.0,0.5824,0.0

